PsychoPy2experiment version="1.90.2"
Settings
  expName = cuesTask2
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Window size (pixels) = (1024, 768)
  Screen = 1
  Monitor = testMonitor
  Units = use prefs
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Routines
  Routine index
    CodeComponent shuffleCode
      Begin Experiment:
        allRows=list(range(18))
        shuffle(allRows) #randomize the order of the indices
        allRows*=10 #multiply the list, so there is a continuation across loops
        #index
        counter = 0
        x = 0
        y = 5
  Routine re_index
    CodeComponent code
      Begin Routine:
        x+=5
        y+=5
  Routine welcome
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Estamos a punto de comenzar.

        Pon atención a las imágenes
        que se presenterán a continuación
    KeyboardComponent key_resp_2
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine randomIndex
    CodeComponent shufflingIndex
      Begin Routine:
        shuffle(allRows) #randomize the order of the index
  Routine trials
    ImageComponent image
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      size = 2
      image [set every repeat] = $stimFile
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  Routine fix
    ImageComponent fix_cross
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      size = 2
      image = images/fixCross.jpg
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Flow
  Routine index
  Routine welcome
  LoopInitiator blocksLoop2 loopType="TrialHandler"
    nReps = 10
    loopType = random
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    LoopInitiator blocksLoop1 loopType="TrialHandler"
      nReps = 1
      conditionsFile = chooseBlock.csv
      loopType = random
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      conditions:
        [{'condsFile': 'cueBlock.csv'},
        {'condsFile': 'neutralBlock.csv'}]
      Routine fix
      LoopInitiator trialsLoop loopType="TrialHandler"
        nReps = 1
        conditionsFile = $condsFile
        Selected rows = $allRows[x:y]
        loopType = sequential
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        Routine trials
      LoopTerminator trialsLoop
    LoopTerminator blocksLoop1
    Routine re_index
  LoopTerminator blocksLoop2
